PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1280, 720]
  expName = Solo Project
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine Instructions
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    TextComponent Instruction
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You will see a series of words. Try to remember as many as you can.
    TextComponent text
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Click Space button to Start
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Routine_1
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    TextComponent text_2
      color [set every repeat] = $color
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $word
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  Routine Recall_Routine
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    TextComponent Instruction_3
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Type all the words you can remember and press Enter when done
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ButtonComponent button
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0,-0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      text = Click here to submit
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Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = SOLO PROJECT 2.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'word': 'Cloud', 'color': 'black'},
      {'word': 'Freedom', 'color': 'red'},
      {'word': 'House', 'color': 'black'},
      {'word': 'Trust', 'color': 'black'},
      {'word': 'Knife', 'color': 'black'},
      {'word': 'Thought', 'color': 'black'},
      {'word': 'Mountain', 'color': 'black'},
      {'word': 'Ring', 'color': 'black'},
      {'word': 'Bicycle', 'color': 'red'},
      {'word': 'Courage', 'color': 'black'},
      {'word': 'Book', 'color': 'black'},
      {'word': 'Bread', 'color': 'black'},
      {'word': 'Justice', 'color': 'black'},
      {'word': 'Shadow', 'color': 'black'},
      {'word': 'Cat', 'color': 'red'},
      {'word': 'Road', 'color': 'black'},
      {'word': 'Glass', 'color': 'black'},
      {'word': 'Chair', 'color': 'black'},
      {'word': 'Lamp', 'color': 'black'},
      {'word': 'Pride', 'color': 'black'},
      {'word': 'Picture', 'color': 'red'},
      {'word': 'Tree', 'color': 'black'},
      {'word': 'Flower', 'color': 'black'},
      {'word': 'Fear', 'color': 'black'},
      {'word': 'Table', 'color': 'black'},
      {'word': 'River', 'color': 'black'},
      {'word': 'Beauty', 'color': 'red'},
      {'word': 'Power', 'color': 'black'},
      {'word': 'Clock', 'color': 'black'},
      {'word': 'Water', 'color': 'black'}]
    Routine Routine_1
  LoopTerminator trials
  Routine Recall_Routine
