PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1280, 720]
  expName = word priming task
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $Study_word
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar","Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $t_word
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = click to submit
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    MouseComponent mouse
      clickable = text_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Study_word.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Study_word': 'book'},
      {'Study_word': 'cushion'},
      {'Study_word': 'phone'},
      {'Study_word': 'marble'},
      {'Study_word': 'board'},
      {'Study_word': 'Laptop'},
      {'Study_word': 'Chart'},
      {'Study_word': 'T-shirt'},
      {'Study_word': 'mouse'},
      {'Study_word': 'Pastry'},
      {'Study_word': 'Case'},
      {'Study_word': 'Cruise'},
      {'Study_word': 'Police'},
      {'Study_word': 'Keys'},
      {'Study_word': 'Poster'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = test_word.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'t_word': 'l_pt_p', 'refernces': 'Laptop', 'old_new': 'old'},
      {'t_word': '_ha_t', 'refernces': 'Chart', 'old_new': 'old'},
      {'t_word': 'T_hi_t', 'refernces': 'Tshirt', 'old_new': 'old'},
      {'t_word': '_ou_se', 'refernces': 'mouse', 'old_new': 'old'},
      {'t_word': 'P_as_tr_', 'refernces': 'Pastry', 'old_new': 'old'},
      {'t_word': 'c_s_', 'refernces': 'Case', 'old_new': 'old'},
      {'t_word': '_ru_is_', 'refernces': 'Cruise', 'old_new': 'old'},
      {'t_word': 'P_li_e', 'refernces': 'Police', 'old_new': 'old'},
      {'t_word': 'K_y', 'refernces': 'Keys', 'old_new': 'old'},
      {'t_word': 'P_st_r', 'refernces': 'Poster', 'old_new': 'old'},
      {'t_word': '_o_rd', 'refernces': 'Board', 'old_new': 'old'},
      {'t_word': '_a_bl_', 'refernces': 'Marble', 'old_new': 'old'},
      {'t_word': '_ho_e', 'refernces': 'Phone', 'old_new': 'old'},
      {'t_word': '_oo_', 'refernces': 'Book', 'old_new': 'old'},
      {'t_word': 'c_s_io_', 'refernces': 'Cushion', 'old_new': 'old'},
      {'t_word': 'ta_l_', 'refernces': 'Table', 'old_new': 'new'},
      {'t_word': 'p_nc_l', 'refernces': 'Pencil', 'old_new': 'new'},
      {'t_word': 'v_s_', 'refernces': 'Vase', 'old_new': 'new'},
      {'t_word': 'bo_t_e', 'refernces': 'Bottle', 'old_new': 'new'},
      {'t_word': 'c_m_ra', 'refernces': 'Camera', 'old_new': 'new'}]
    Routine test
  LoopTerminator trials_2
